PsychoPy2experiment version="1.84.0rc5"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = example
  Units = use prefs
  Use version = latest
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent image
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      image = resources/bird.jpg
      size = (0.5, 0.5)
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    CodeComponent code
      Begin Experiment:
        import subprocess
        import glob

        # Start QRSDetector as subprocess.
        p = subprocess.Popen(["python", "QRSDetector.py"], shell=False)

        # Initialize audio feedback setup.
        sound.Sound()
        audio = psychopy.sound.SoundPyo(value='C', secs=0.2, volume=5.0)

        # Initialize QRSDetector log file.
        qrs_log_file = max(glob.iglob('data/*.csv'), key=os.path.getctime)
        print "QRSLog:", qrs_log_file
        fin = open(qrs_log_file, "r")
      End Routine:
        file_exists = os.path.exists("flag.txt")
        if file_exists:
            os.remove("flag.txt")
      End Experiment:
        p.kill()
        fin.close()
      Each Frame:
        # Log data.
        lines = fin.readlines()
        fin.seek(0)
        split_last_line = lines[-1].strip().split(" ")
        if len(split_last_line) == 4:
            string = "%s %s %s %s" % (split_last_line[0], split_last_line[1], split_last_line[2], split_last_line[3])
            logging.log(level=logging.DATA, msg=string)
        else:
            split_lastbutone_line = lines[-2].strip().split(" ")
            string = "%s %s %s %s" % (split_lastbutone_line[0], split_lastbutone_line[1], split_lastbutone_line[2], split_lastbutone_line[3])
            logging.log(level=logging.DATA, msg=string)

        # Check if QRS peak was detected and trigger events if yes.
        file_exists = os.path.exists("flag.txt")

        # Trigger event if peak was detected.
        if file_exists:
            # Play audio.
            audio.play()

            # Start listening for keys.
            psychopy.event.getKeys(keyList=["z"], timeStamped=True)

            # Do whatever else.
            print "Peak detected!"

            os.remove("flag.txt")
Flow
  Routine trial
